<MorpheusModel version="4">
    <Description>
        <Title>Validation neighborhood sixth order with theoretical scaling</Title>
    </Description>
    <Global/>
    <Space>
        <SpaceSymbol symbol="l"/>
        <Lattice class="square">
            <Size symbol="size" value="25, 25, 0"/>
            <BoundaryConditions>
                <Condition type="periodic" boundary="x"/>
                <Condition type="periodic" boundary="y"/>
            </BoundaryConditions>
            <Neighborhood>
                <Order>2</Order>
            </Neighborhood>
        </Lattice>
    </Space>
    <Time>
        <StartTime value="0"/>
        <StopTime value="2.5e4"/>
        <!--    <Disabled>
        <SaveInterval value="5e3"/>
    </Disabled>
-->
        <RandomSeed value="0"/>
        <TimeSymbol symbol="time"/>
    </Time>
    <CellTypes>
        <CellType class="biological" name="ct1">
            <VolumeConstraint target="30" strength="1000"/>
            <SurfaceConstraint target="600" strength="0.55555555556" mode="surface"/>
        </CellType>
        <CellType class="medium" name="medium"/>
    </CellTypes>
    <CPM>
        <Interaction default="0.0">
            <Contact type1="ct1" type2="medium" value="100"/>
            <Contact type1="ct1" type2="ct1" value="0"/>
        </Interaction>
        <MonteCarloSampler stepper="edgelist">
            <MCSDuration value="1"/>
            <Neighborhood>
                <Order>2</Order>
            </Neighborhood>
            <MetropolisKinetics temperature="600"/>
        </MonteCarloSampler>
        <ShapeSurface scaling="none">
            <Neighborhood>
                <Order>6</Order>
            </Neighborhood>
        </ShapeSurface>
    </CPM>
    <CellPopulations>
        <Population type="ct1" size="0">
            <InitCircle number-of-cells="1" mode="random">
                <Dimensions radius="size.x/3" center="size.x/2, size.y/2, 0"/>
            </InitCircle>
        </Population>
    </CellPopulations>
    <Analysis>
        <Gnuplotter time-step="100" decorate="false">
            <Terminal name="png"/>
            <Plot>
                <Cells flooding="true" value="cell.type"/>
            </Plot>
        </Gnuplotter>
        <ModelGraph format="dot" reduced="false" include-tags="#untagged"/>
    </Analysis>
</MorpheusModel>
